OpenViBE-Scenario
Comment
  Shooter Keyboard Control

  A test of the SSVEP Shooter game by using keyboard. Use this
  scenario to test the stimulator. You can modify the order in which the
  targets appear in the SSVEP Shooter Controller box. Each
  number represents a target at position N * 45 degrees. After
  destruction of the last target, the stimulator application will close
  automatically.

  Available controls :

  [S] -> Start the experiment

  [8] -> Shoot

  [4] -> Turn the ship clockwise

  [6] -> Turn the ship counter-clockwise

VRPN Target Request
  Peripheral name = RequestCommand@localhost:1337
  Button 1 ON = OVTK_StimulationId_Target
  Button 1 OFF = OVTK_StimulationId_NonTarget
-> SSVEP Shooter Controller => #1
  Lua Script = ${Path_Samples}/bci/ssvep/Scripts/shooter_stimulator.lua
  Target Sequence = 0 3 5 7 2 6 4 1
Input 1=#1, Input 2=#1, Input 3=#1, Input 4=#1, Input 5=#1, Input 6=#1, Input 7=#1, Input 8=#1 -> Button VRPN Server "VRPN Target Command"
  Peripheral name = NewTargetCommand
  Button 1 ON = OVTK_StimulationId_Label_00
  Button 1 OFF = OVTK_StimulationId_Label_00
  Button 2 ON = OVTK_StimulationId_Label_01
  Button 2 OFF = OVTK_StimulationId_Label_01
  Button 3 ON = OVTK_StimulationId_Label_02
  Button 3 OFF = OVTK_StimulationId_Label_02
  Button 4 ON = OVTK_StimulationId_Label_03
  Button 4 OFF = OVTK_StimulationId_Label_03
  Button 5 ON = OVTK_StimulationId_Label_04
  Button 5 OFF = OVTK_StimulationId_Label_04
  Button 6 ON = OVTK_StimulationId_Label_05
  Button 6 OFF = OVTK_StimulationId_Label_05
  Button 7 ON = OVTK_StimulationId_Label_06
  Button 7 OFF = OVTK_StimulationId_Label_06
  Button 8 ON = OVTK_StimulationId_Label_07
  Button 8 OFF = OVTK_StimulationId_Label_07
Keyboard stimulator => #3
  Filename = ${Path_Samples}/bci/ssvep/Configuration/shooter_keyboard_settings.cfg
-> Button Simplifier
  Lua Script = ${Path_Samples}/bci/ssvep/Scripts/button_simplifier.lua
-> Identity => #5
Input stimulations 1=#5, Input stimulations 2=#1 -> 0xc67a01dc Stimulation multiplexer => #6
Input 1=#5, Input 2=#6, Input 3=#5, Input 4=#5 -> Button VRPN Server "Control Buttons"
  Peripheral name = ControlButton
  Button 1 ON = OVTK_StimulationId_ExperimentStart
  Button 1 OFF = OVTK_StimulationId_ExperimentStart
  Button 2 ON = OVTK_StimulationId_ExperimentStop
  Button 2 OFF = OVTK_StimulationId_ExperimentStop
  Button 3 ON = OVTK_StimulationId_VisualStimulationStart
  Button 3 OFF = OVTK_StimulationId_VisualStimulationStart
  Button 4 ON = OVTK_StimulationId_VisualStimulationStop
  Button 4 OFF = OVTK_StimulationId_VisualStimulationStop
#3 -> Stimulation Repeater => #8
  Lua Script = ${Path_Samples}/bci/ssvep/Scripts/stimulation_repeater.lua
Input 1=#8, Input 2=#8, Input 3=#8 -> Button VRPN Server "VRPN Ship Control"
  Peripheral name = ShipControl
  Button 1 ON = OVTK_StimulationId_Label_00
  Button 1 OFF = OVTK_StimulationId_Label_00
  Button 2 ON = OVTK_StimulationId_Label_01
  Button 2 OFF = OVTK_StimulationId_Label_01
  Button 3 ON = OVTK_StimulationId_Label_02
  Button 3 OFF = OVTK_StimulationId_Label_02

Start Stimulation
  Lua Script = ${Path_Samples}/bci/ssvep/Scripts/start_stimulation.lua
  Delay = 1
-> Run Command
  Stimulation 1 = OVTK_StimulationId_ExperimentStart
  Command 1 = cd ${Path_Root}/../scripts && ./ov-ssvep-demo-shooter.sh&
