OpenViBE-Scenario
Comment
  SSVEP Training Keyboard Control

  This is a compulsory test of VRPN connection between the OpenViBE
  designer and SSVEP stimulator application. The scenario launches
  the stimulator program when the play button is pressed.

  The experimental protocol follows. Note that you should NOT use
  the Keyboard Test scenario to do the testing. Rather use the Training
  Acquisition scenario where all of the following steps are automated.

  By default buttons are linked to stimulations as follows
  (use the numeric keypad for goal controls) :

  [4], [8], [6], [2] -> Mark corresponding target on screen as a goal.

  [5] - Mark the blank target as a goal.

  [S] - Start the experiment

  [D] - Stop the experiment and quit application

  [F] - Start flickering

  [G] - Stop flickering

Keyboard stimulator
  Filename = ${Path_Samples}/bci/ssvep/Configuration/trainer_keyboard_settings.cfg
-> Button Simplifier
  Lua Script = ${Path_Samples}/bci/ssvep/Scripts/button_simplifier.lua
-> Identity => #2
Input 1=#2, Input 2=#2, Input 3=#2, Input 4=#2 -> Button VRPN Server "Control Buttons"
  Peripheral name = ControlButton
  Button 1 ON = OVTK_StimulationId_ExperimentStart
  Button 1 OFF = OVTK_StimulationId_ExperimentStart
  Button 2 ON = OVTK_StimulationId_ExperimentStop
  Button 2 OFF = OVTK_StimulationId_ExperimentStop
  Button 3 ON = OVTK_StimulationId_VisualStimulationStart
  Button 3 OFF = OVTK_StimulationId_VisualStimulationStart
  Button 4 ON = OVTK_StimulationId_VisualStimulationStop
  Button 4 OFF = OVTK_StimulationId_VisualStimulationStop
Input 1=#2, Input 2=#2, Input 3=#2, Input 4=#2 -> Button VRPN Server "Goal Selection Buttons"
  Peripheral name = GoalButton
  Button 1 ON = OVTK_StimulationId_Label_00
  Button 1 OFF = OVTK_StimulationId_Label_00
  Button 2 ON = OVTK_StimulationId_Label_01
  Button 2 OFF = OVTK_StimulationId_Label_01
  Button 3 ON = OVTK_StimulationId_Label_02
  Button 3 OFF = OVTK_StimulationId_Label_02
  Button 4 ON = OVTK_StimulationId_Label_03
  Button 4 OFF = OVTK_StimulationId_Label_03

0xc67a01dc Start Stimulation
  Lua Script = ${Path_Samples}/bci/ssvep/Scripts/start_stimulation.lua
  Delay = 1
-> Run Command
  Stimulation 1 = OVTK_StimulationId_ExperimentStart
  Command 1 = cd ${Path_Root}/../scripts && ./ov-ssvep-demo-trainer.sh&
