OpenViBE-Scenario
Comment
  Scenario description

  This scenario must be run at least once before
  running any further SSVEP scenarios

  This is a scenario where you can configure your SSVEP experiment. There
  are two boxes containing configuration parameters:

  Peripheral Settings

  Experiment Settings

  For more detailed description please refer to the SSVEP
  documentation page [].
Comment
  Peripheral Settings

  Settings in this box must match your hardware configuration.
  Currently, the only supported setting is the screen refresh rate.

  Screen Refresh Rate :  The refresh rate of your screen,
  refer to your screen's user manual to find this value.

  Important notice

  Your screen will be able to reproduce only frequencies which
  are result of division of your screen refresh rate by an
  integer. Please refer to the SSVEP experiment documentation

Peripheral Settings
  Lua Script = ${Path_Samples}/bci/ssvep/scripts/configuration-peripheral-settings.lua
  Screen Refresh Rate = 60
-> 0xc67a01dc Experiment Settings
  Lua Script = ${Path_Samples}/bci/ssvep/scripts/configuration-experiment-settings.lua
  Target Light Color = 100,0,0
  Target Dark Colour = 0,0,0
  Stimulation Frequencies = 20;15;12
  Processing Epoch Duration = 0.5
  Processing Epoch Interval = 0.1
  Processing Frequency Tolerance = 0.250
-> Player Controller
  Stimulation name = OVTK_StimulationId_TrainCompleted
  Action to perform = Stop
