OpenViBE-Scenario
Comment
  You can browse each box' documentation by selecting the box and pressing F1
Comment
  Scenario Controller

  The VRPN Client receives commands from the external
  stimulator. The user can start the training by pressing [space]
  in the application window, and the scenario will stop
  automatically after the training is finished.
Comment
  Stimulator Start

  This SSVEP scenario needs to run along with
  an external application. The application is run
  automatically after the start of the scenario.
Comment
  Stimulator controls
Comment
  Training Acquisition

  This scenario is used for acquiring the training data and has to be run
  first. Running the scenario will automatically call the SSVEP
  stimulator and wait until it is initialized. Before using this box please
  familiarize yourself with the experimental protocol.

  The main component is the SSVEP Training Controller box.
  This box takes several parameters which enable the operator to tune
  the training according to his needs.

  Goal Sequence - List of targets to stimulate. Each target is
  represented by a number. Targets 1, 2, 3 and 4 correspond to
  frequencies 20, 15, 12 and 10Hz respectively. Index 0 corresponds to
  neutral stimulation, when the subject is supposed to look in the
  middle of the screen.

  Stimulation Duration - Time, in seconds, during which the
  targets will be flashing during one cycle.

  Break Duration - Time, in seconds, between the series of
  stimulations. During this period, all targets are visible.

  Flickering Delay - Delay between the moment the goal
  indicator appears and the moment the targets begin to flicker.


  After the session the resulting file will be saved in [] and you will be
  able to proceed to the next phase : classifier training.

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal strea -> Channel selector => #1
  Channels list = CPz;Oz;O1;O2;POz;Iz
  Selection by index = false
Scenario Control => #2
  Peripheral name = SSVEP_VRPN_StartStop@localhost:${SSVEP_VRPNServerPort}
  Button 1 ON = OVTK_StimulationId_ExperimentStart
  Button 1 OFF = OVTK_StimulationId_ExperimentStart
  Button 2 ON = OVTK_StimulationId_ExperimentStop
  Button 2 OFF = OVTK_StimulationId_ExperimentStop
#2.Output 2 -> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
#2.Output 1 -> SSVEP Training Controller => #4
  Lua Script = ${Path_Samples}/bci/ssvep/scripts/training_stimulator.lua
  Goal sequence = 0 1 2 3 0 1 2 3 0 1 2 3
  Stimulation duration = 8
  Break duration = 4
  Flickering delay = 1
#4.Stimulations -> Identity => #5
Input 1=#5, Input 2=#5, Input 3=#5, Input 4=#5 -> Button VRPN Server "Stimulator Control"
  Peripheral name = SSVEP_VRPN_StimulatorControl
  Button 1 ON = OVTK_StimulationId_ExperimentStart
  Button 1 OFF = OVTK_StimulationId_ExperimentStart
  Button 2 ON = OVTK_StimulationId_ExperimentStop
  Button 2 OFF = OVTK_StimulationId_ExperimentStop
  Button 3 ON = OVTK_StimulationId_VisualStimulationStart
  Button 3 OFF = OVTK_StimulationId_VisualStimulationStart
  Button 4 ON = OVTK_StimulationId_VisualStimulationStop
  Button 4 OFF = OVTK_StimulationId_VisualStimulationStop
#4.New output -> Identity => #7
Input 1=#7, Input 2=#7, Input 3=#7, Input 4=#7 -> Button VRPN Server "Target Select"
  Peripheral name = SSVEP_VRPN_Target
  Button 1 ON = OVTK_StimulationId_Label_00
  Button 1 OFF = OVTK_StimulationId_Label_00
  Button 2 ON = OVTK_StimulationId_Label_01
  Button 2 OFF = OVTK_StimulationId_Label_01
  Button 3 ON = OVTK_StimulationId_Label_02
  Button 3 OFF = OVTK_StimulationId_Label_02
  Button 4 ON = OVTK_StimulationId_Label_03
  Button 4 OFF = OVTK_StimulationId_Label_03
Input stimulations 1=#4.Stimulations, Input stimulations 2=#4.New output -> Stimulation multiplexer => #9
Input stream 2=#1, Input stream 3=#9 -> Generic stream writer
  Filename = ${Path_Samples}/signals/ssvep-record-[$core{date}-$core{time}].ov
  Use compression = false

Start Stimulation
  Lua Script = ${Path_Samples}/bci/ssvep/scripts/start_stimulation.lua
  Delay = 1
-> 0xc67a01dc Run Command
  Stimulation 1 = OVTK_StimulationId_ExperimentStart
  Command 1 = OpenViBE-external-application-launcher${Shell_Extension} ${Program_Launcher_Prefix}ssvep-demo${Shell_Extension} 3class-training
