OpenViBE-Scenario
Comment
  Classifier Training

  After the training session, this scenario will process the recorded
  signal and train several classifiers. Each classifier works with one
  stimulation frequency and is capable to discern whether it is
  stimulated or not.

  All of the classifiers will be saved in []. If you want them to be saved
  in a different place, you should modify the paths in the three
  Classifier Trainer boxes.

  Training will begin automatically after the scenario finishes. You can
  verify classification rates in the terminal window.
Comment
  Chain for 20Hz
Comment
  Chain for 15Hz
Comment
  Chain for 12Hz
Comment
  20 Hz
  CPz - POz
Comment
  20 Hz
  4 x Oz - (O1 + O2 + POz + Iz)
Comment
  15 Hz
  CPz - POz
Comment
  15 Hz
  4 x Oz - (O1 + O2 + POz + Iz)
Comment
  12 Hz
  CPz - POz
Comment
  12 Hz
  4 x Oz - (O1 + O2 + POz + Iz)
Comment
  Processing chain

  The signal is processed in several stages :

  1. The signal is split by channels and two linear combinations are
  calculated : CPz - POz and 4 x Oz - (O1 + O2 + POz + Iz)

  2. For each stimulated frequency, both of these characteristics are
  split into parts where the frequency was stimulated and the rest.

  3. The signal is cut into windows of 1s every 100ms. The value of the
  signal is squared, averaged and square rooted.
Comment
  Feature vector containing signal
  during stimulated periods.
Comment
  Feature vector containing signal
  during non-stimulated periods.

Generic stream reader => #0
  Filename = /opt/openvibe/trunk/dist/share/openvibe-scenarios/signals/ssvep-record-[2010.12.06-17.31.28].ov
Input stream 1=#0.Output stream 2, Input stream 2=#0.Output stream 3 -> Identity => #1
#1.Output stream 1 -> Channel selector
  Channels list = CPz;POz
  Selection by index = false
-> Spatial Filter "CPz - POz" => #3
  Spatial filter coefficients = 1 -1
  Number of output channels = 1
  Number of input channels = 2
#1.Output stream 1 -> Channel selector
  Channels list = Oz;O1;O2;POz;Iz
  Selection by index = false
-> Spatial Filter "4 x Oz - (O1 + O2 + POz + Iz)" => #5
  Spatial filter coefficients = 4 -1 -1 -1 -1
  Number of output channels = 1
  Number of input channels = 5
Input stream 1=#3, Input stream 2=#5, Input stream 3=#1.Output stream 2 -> Identity => #6
Input stream 1=#6.Output stream 1, Input stream 2=#6.Output stream 2, Input stream 3=#6.Output stream 3 -> Identity => #7
Input stream 1=#7.Output stream 1, Input stream 2=#7.Output stream 3 -> Identity => #8
#8.Output stream 2 -> Target Separator => #9
  Lua Script = ${Path_Samples}/bci/ssvep/Scripts/target_separator.lua
  Targets = 1
  Non Targets = 0 2 3
  Output Stimulation = OVTK_StimulationId_Target
#8.Output stream 1 -> Temporal filter "20 Hz" => #10
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 29.625000
  High cut frequency (Hz) = 30.375000
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Path_Samples}/bci/ssvep/Configuration/temporal-filter-20Hz.xml
Input signal=#10, Input stimulations=#9.Stimulations -> Stimulation based epoching "SBE" => #11
  Epoch duration (in sec) = 6.000000
  Epoch offset (in sec) = 1.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Path_Samples}/bci/ssvep/Configuration/stimulation-based-epoching.xml
#11.Epoched signal -> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 0.500000
  Epoch 1 intervals (in sec) = 0.100000
  0x8d21ff41 = ${Path_Samples}/bci/ssvep/Configuration/time-based-epoching.xml
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP" => #15
  Equation = log(1+x)
#8.Output stream 1 -> Temporal filter "20 Hz" => #16
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 29.625000
  High cut frequency (Hz) = 30.375000
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Path_Samples}/bci/ssvep/Configuration/temporal-filter-20Hz.xml
Input signal=#16, Input stimulations=#9.New output -> Stimulation based epoching "SBE" => #17
  Epoch duration (in sec) = 6.000000
  Epoch offset (in sec) = 1.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Path_Samples}/bci/ssvep/Configuration/stimulation-based-epoching.xml
#17.Epoched signal -> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 0.500000
  Epoch 1 intervals (in sec) = 0.100000
  0x8d21ff41 = ${Path_Samples}/bci/ssvep/Configuration/time-based-epoching.xml
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP" => #21
  Equation = log(1+x)
Input stream 1=#7.Output stream 2, Input stream 2=#7.Output stream 3 -> Identity => #22
#22.Output stream 2 -> Target Separator => #23
  Lua Script = ${Path_Samples}/bci/ssvep/Scripts/target_separator.lua
  Targets = 1
  Non Targets = 0 2 3
  Output Stimulation = OVTK_StimulationId_Target
#22.Output stream 1 -> Temporal filter "20 Hz" => #24
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 29.625000
  High cut frequency (Hz) = 30.375000
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Path_Samples}/bci/ssvep/Configuration/temporal-filter-20Hz.xml
Input signal=#24, Input stimulations=#23.Stimulations -> Stimulation based epoching "SBE" => #25
  Epoch duration (in sec) = 6.000000
  Epoch offset (in sec) = 1.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Path_Samples}/bci/ssvep/Configuration/stimulation-based-epoching.xml
#25.Epoched signal -> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 0.500000
  Epoch 1 intervals (in sec) = 0.100000
  0x8d21ff41 = ${Path_Samples}/bci/ssvep/Configuration/time-based-epoching.xml
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP" => #29
  Equation = log(1+x)
Input stream 1=#15, Input stream 2=#29 -> Feature aggregator => #30
#22.Output stream 1 -> Temporal filter "20 Hz" => #31
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 29.625000
  High cut frequency (Hz) = 30.375000
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Path_Samples}/bci/ssvep/Configuration/temporal-filter-20Hz.xml
Input signal=#31, Input stimulations=#23.New output -> Stimulation based epoching "SBE" => #32
  Epoch duration (in sec) = 6.000000
  Epoch offset (in sec) = 1.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Path_Samples}/bci/ssvep/Configuration/stimulation-based-epoching.xml
#32.Epoched signal -> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 0.500000
  Epoch 1 intervals (in sec) = 0.100000
  0x8d21ff41 = ${Path_Samples}/bci/ssvep/Configuration/time-based-epoching.xml
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP" => #36
  Equation = log(1+x)
Input stream 1=#21, Input stream 2=#36 -> Feature aggregator => #37
Stimulations=#7.Output stream 3, Features for class 1=#30, Features for class 2=#37 -> 20Hz Classifier
  Classifier to use = Linear Discrimimant Analysis (LDA)
  Filename to save configuration to = ${Path_Samples}/bci/ssvep/Classifiers/Classifier-20
  Train trigger = OVTK_StimulationId_ExperimentStop
  Number of partitions for k-fold test = 10
Input stream 1=#6.Output stream 1, Input stream 2=#6.Output stream 2, Input stream 3=#6.Output stream 3 -> Identity => #39
Input stream 1=#39.Output stream 1, Input stream 2=#39.Output stream 3 -> Identity => #40
#40.Output stream 2 -> Target Separator => #41
  Lua Script = ${Path_Samples}/bci/ssvep/Scripts/target_separator.lua
  Targets = 2
  Non Targets = 0 1 3
  Output Stimulation = OVTK_StimulationId_Target
#40.Output stream 1 -> Temporal filter "15 Hz" => #42
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 29.625000
  High cut frequency (Hz) = 30.375000
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Path_Samples}/bci/ssvep/Configuration/temporal-filter-15Hz.xml
Input signal=#42, Input stimulations=#41.Stimulations -> Stimulation based epoching "SBE" => #43
  Epoch duration (in sec) = 6.000000
  Epoch offset (in sec) = 1.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Path_Samples}/bci/ssvep/Configuration/stimulation-based-epoching.xml
#43.Epoched signal -> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 0.500000
  Epoch 1 intervals (in sec) = 0.100000
  0x8d21ff41 = ${Path_Samples}/bci/ssvep/Configuration/time-based-epoching.xml
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP" => #47
  Equation = log(1+x)
#40.Output stream 1 -> Temporal filter "15 Hz" => #48
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 29.625000
  High cut frequency (Hz) = 30.375000
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Path_Samples}/bci/ssvep/Configuration/temporal-filter-15Hz.xml
Input signal=#48, Input stimulations=#41.New output -> Stimulation based epoching "SBE" => #49
  Epoch duration (in sec) = 6.000000
  Epoch offset (in sec) = 1.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Path_Samples}/bci/ssvep/Configuration/stimulation-based-epoching.xml
#49.Epoched signal -> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 0.500000
  Epoch 1 intervals (in sec) = 0.100000
  0x8d21ff41 = ${Path_Samples}/bci/ssvep/Configuration/time-based-epoching.xml
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP" => #53
  Equation = log(1+x)
Input stream 1=#39.Output stream 2, Input stream 2=#39.Output stream 3 -> Identity => #54
#54.Output stream 2 -> Target Separator => #55
  Lua Script = ${Path_Samples}/bci/ssvep/Scripts/target_separator.lua
  Targets = 2
  Non Targets = 0 1 3
  Output Stimulation = OVTK_StimulationId_Target
#54.Output stream 1 -> Temporal filter "15 Hz" => #56
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 29.625000
  High cut frequency (Hz) = 30.375000
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Path_Samples}/bci/ssvep/Configuration/temporal-filter-15Hz.xml
Input signal=#56, Input stimulations=#55.Stimulations -> Stimulation based epoching "SBE" => #57
  Epoch duration (in sec) = 6.000000
  Epoch offset (in sec) = 1.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Path_Samples}/bci/ssvep/Configuration/stimulation-based-epoching.xml
#57.Epoched signal -> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 0.500000
  Epoch 1 intervals (in sec) = 0.100000
  0x8d21ff41 = ${Path_Samples}/bci/ssvep/Configuration/time-based-epoching.xml
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP" => #61
  Equation = log(1+x)
Input stream 1=#47, Input stream 2=#61 -> Feature aggregator => #62
#54.Output stream 1 -> Temporal filter "15 Hz" => #63
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 29.625000
  High cut frequency (Hz) = 30.375000
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Path_Samples}/bci/ssvep/Configuration/temporal-filter-15Hz.xml
Input signal=#63, Input stimulations=#55.New output -> Stimulation based epoching "SBE" => #64
  Epoch duration (in sec) = 6.000000
  Epoch offset (in sec) = 1.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Path_Samples}/bci/ssvep/Configuration/stimulation-based-epoching.xml
#64.Epoched signal -> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 0.500000
  Epoch 1 intervals (in sec) = 0.100000
  0x8d21ff41 = ${Path_Samples}/bci/ssvep/Configuration/time-based-epoching.xml
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP" => #68
  Equation = log(1+x)
Input stream 1=#53, Input stream 2=#68 -> Feature aggregator => #69
Stimulations=#39.Output stream 3, Features for class 1=#62, Features for class 2=#69 -> 0xc67a01dc 15Hz Classifier
  Classifier to use = Linear Discrimimant Analysis (LDA)
  Filename to save configuration to = ${Path_Samples}/bci/ssvep/Classifiers/Classifier-15
  Train trigger = OVTK_StimulationId_ExperimentStop
  Number of partitions for k-fold test = 10
Input stream 1=#6.Output stream 1, Input stream 2=#6.Output stream 2, Input stream 3=#6.Output stream 3 -> Identity => #71
Input stream 1=#71.Output stream 1, Input stream 2=#71.Output stream 3 -> Identity => #72
#72.Output stream 2 -> Target Separator => #73
  Lua Script = ${Path_Samples}/bci/ssvep/Scripts/target_separator.lua
  Targets = 3
  Non Targets = 0 1 2
  Output Stimulation = OVTK_StimulationId_Target
#72.Output stream 1 -> Temporal filter "12 Hz" => #74
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 29.625000
  High cut frequency (Hz) = 30.375000
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Path_Samples}/bci/ssvep/Configuration/temporal-filter-12Hz.xml
Input signal=#74, Input stimulations=#73.Stimulations -> Stimulation based epoching "SBE" => #75
  Epoch duration (in sec) = 6.000000
  Epoch offset (in sec) = 1.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Path_Samples}/bci/ssvep/Configuration/stimulation-based-epoching.xml
#75.Epoched signal -> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 0.500000
  Epoch 1 intervals (in sec) = 0.100000
  0x8d21ff41 = ${Path_Samples}/bci/ssvep/Configuration/time-based-epoching.xml
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP" => #79
  Equation = log(1+x)
#72.Output stream 1 -> Temporal filter "12 Hz" => #80
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 29.625000
  High cut frequency (Hz) = 30.375000
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Path_Samples}/bci/ssvep/Configuration/temporal-filter-12Hz.xml
Input signal=#80, Input stimulations=#73.New output -> Stimulation based epoching "SBE" => #81
  Epoch duration (in sec) = 6.000000
  Epoch offset (in sec) = 1.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Path_Samples}/bci/ssvep/Configuration/stimulation-based-epoching.xml
#81.Epoched signal -> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 0.500000
  Epoch 1 intervals (in sec) = 0.100000
  0x8d21ff41 = ${Path_Samples}/bci/ssvep/Configuration/time-based-epoching.xml
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP" => #85
  Equation = log(1+x)
Input stream 1=#71.Output stream 2, Input stream 2=#71.Output stream 3 -> Identity => #86
#86.Output stream 2 -> Target Separator => #87
  Lua Script = ${Path_Samples}/bci/ssvep/Scripts/target_separator.lua
  Targets = 3
  Non Targets = 0 1 2
  Output Stimulation = OVTK_StimulationId_Target
#86.Output stream 1 -> Temporal filter "12 Hz" => #88
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 29.625000
  High cut frequency (Hz) = 30.375000
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Path_Samples}/bci/ssvep/Configuration/temporal-filter-12Hz.xml
Input signal=#88, Input stimulations=#87.Stimulations -> Stimulation based epoching "SBE" => #89
  Epoch duration (in sec) = 6.000000
  Epoch offset (in sec) = 1.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Path_Samples}/bci/ssvep/Configuration/stimulation-based-epoching.xml
#89.Epoched signal -> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 0.500000
  Epoch 1 intervals (in sec) = 0.100000
  0x8d21ff41 = ${Path_Samples}/bci/ssvep/Configuration/time-based-epoching.xml
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP" => #93
  Equation = log(1+x)
Input stream 1=#79, Input stream 2=#93 -> Feature aggregator => #94
#86.Output stream 1 -> Temporal filter "12 Hz" => #95
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 29.625000
  High cut frequency (Hz) = 30.375000
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Path_Samples}/bci/ssvep/Configuration/temporal-filter-12Hz.xml
Input signal=#95, Input stimulations=#87.New output -> Stimulation based epoching "SBE" => #96
  Epoch duration (in sec) = 6.000000
  Epoch offset (in sec) = 1.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Path_Samples}/bci/ssvep/Configuration/stimulation-based-epoching.xml
#96.Epoched signal -> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 0.500000
  Epoch 1 intervals (in sec) = 0.100000
  0x8d21ff41 = ${Path_Samples}/bci/ssvep/Configuration/time-based-epoching.xml
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP" => #100
  Equation = log(1+x)
Input stream 1=#85, Input stream 2=#100 -> Feature aggregator => #101
Stimulations=#71.Output stream 3, Features for class 1=#94, Features for class 2=#101 -> 12Hz Classifier
  Classifier to use = Linear Discrimimant Analysis (LDA)
  Filename to save configuration to = ${Path_Samples}/bci/ssvep/Classifiers/Classifier-12
  Train trigger = OVTK_StimulationId_ExperimentStop
  Number of partitions for k-fold test = 10
