OpenViBE-Scenario
Comment
  You can browse each box' documentation by selecting the box and pressing F1
Comment
  Scenario Controller

  The VRPN Client receives commands from the external
  stimulator. The user can start the training by pressing [space]
  in the application window, and the scenario will stop
  automatically after the training is finished.
Comment
  Stimulator Start

  This SSVEP scenario needs to run along with
  an external application. The application is run
  automatically after the start of the scenario.
Comment
  Stimulator controls

Scenario Control => #0
  Peripheral name = SSVEP_VRPN_StartStop@${SSVEP_VRPNServerHost}:${SSVEP_VRPNServerPort}
  Button 1 ON = OVTK_StimulationId_ExperimentStart
  Button 1 OFF = OVTK_StimulationId_ExperimentStart
  Button 2 ON = OVTK_StimulationId_ExperimentStop
  Button 2 OFF = OVTK_StimulationId_ExperimentStop
#0.Output 2 -> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
#0.Output 1 -> SSVEP Training Controller => #2
  Lua Script = ${Path_Samples}/bci/ssvep/scripts/training-acquisition-controller.lua
  Goal sequence = 0 2 3 1 2 1 0 3 1 2 3 0 2 0 3 1 0 3 1 2 3 0 1 2 1 3 2 0 3 2 0 1
  Stimulation duration = 7.000000
  Break duration = 4.000000
  Flickering delay = 1.000000
  Training Target Size = 0.3;0.3
  Training Targets' Positions = (0.0;0.0);(0.0;0.5);(-0.5;0.0);(0.5;0.0)
#2.Stimulations -> Identity => #3
Input 1=#3, Input 2=#3, Input 3=#3, Input 4=#3 -> Button VRPN Server "Stimulator Control"
  Peripheral name = SSVEP_VRPN_StimulatorControl
  Button 1 ON = OVTK_StimulationId_ExperimentStart
  Button 1 OFF = OVTK_StimulationId_ExperimentStart
  Button 2 ON = OVTK_StimulationId_ExperimentStop
  Button 2 OFF = OVTK_StimulationId_ExperimentStop
  Button 3 ON = OVTK_StimulationId_VisualStimulationStart
  Button 3 OFF = OVTK_StimulationId_VisualStimulationStart
  Button 4 ON = OVTK_StimulationId_VisualStimulationStop
  Button 4 OFF = OVTK_StimulationId_VisualStimulationStop
#2.New output -> Identity => #5
Input 1=#5, Input 2=#5, Input 3=#5, Input 4=#5, Input 5=#5, Input 6=#5, Input 7=#5 -> Button VRPN Server "Target Select"
  Peripheral name = SSVEP_VRPN_Target
  Button 1 ON = OVTK_StimulationId_Label_00
  Button 1 OFF = OVTK_StimulationId_Label_00
  Button 2 ON = OVTK_StimulationId_Label_01
  Button 2 OFF = OVTK_StimulationId_Label_01
  Button 3 ON = OVTK_StimulationId_Label_02
  Button 3 OFF = OVTK_StimulationId_Label_02
  Button 4 ON = OVTK_StimulationId_Label_03
  Button 4 OFF = OVTK_StimulationId_Label_03
  Button 5 ON = OVTK_StimulationId_Label_04
  Button 5 OFF = OVTK_StimulationId_Label_04
  Button 6 ON = OVTK_StimulationId_Label_05
  Button 6 OFF = OVTK_StimulationId_Label_05
  Button 7 ON = OVTK_StimulationId_Label_06
  Button 7 OFF = OVTK_StimulationId_Label_06
Input stimulations 1=#2.Stimulations, Input stimulations 2=#2.New output -> Stimulation multiplexer => #7
Acquisition client => #8
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
  Button 1 OFF = OVTK_StimulationId_ExperimentStart
  Button 2 ON = OVTK_StimulationId_ExperimentStop
  Button 2 OFF = OVTK_StimulationId_ExperimentStop
#8.Signal strea -> Channel selector => #9
  Channels list = CPz;Oz;O1;O2;POz;Iz
  Selection by index = false
Input stream 2=#9, Input stream 3=#7 -> Generic stream writer
  Filename = ${Path_Samples}/signals/ssvep-record-[$core{date}-$core{time}].ov
  Use compression = false

Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop

Start Stimulation
  Lua Script = ${Path_Samples}/bci/ssvep/scripts/start-stimulator.lua
  Delay = 1
-> Run Command
  Stimulation 1 = OVTK_StimulationId_ExperimentStart
  Command 1 = ${External_Application_Launcher} ssvep-demo-training

Stimulation multiplexer
