OpenViBE-Scenario
Comment
  Classifier Training

  After the training session, this scenario will process the recorded
  signal and train several classifiers. Each classifier works with one
  stimulation frequency and is capable to discern whether it is
  stimulated or not.

  All of the classifiers will be saved in []. If you want them to be saved
  in a different place, you should modify the paths in the three
  Classifier Trainer boxes.

  Training will begin automatically after the scenario finishes. You can
  verify classification rates in the terminal window.
Comment
  Chain for 20Hz
Comment
  Chain for 15Hz
Comment
  Chain for 12Hz
Comment
  20 Hz
  CPz - POz
Comment
  20 Hz
  4 x Oz - (O1 + O2 + POz + Iz)
Comment
  15 Hz
  CPz - POz
Comment
  15 Hz
  4 x Oz - (O1 + O2 + POz + Iz)
Comment
  12 Hz
  CPz - POz
Comment
  12 Hz
  4 x Oz - (O1 + O2 + POz + Iz)
Comment
  Processing chain

  The signal is processed in several stages :

  1. The signal is split by channels and two linear combinations are
  calculated : CPz - POz and 4 x Oz - (O1 + O2 + POz + Iz)

  2. For each stimulated frequency, both of these characteristics are
  split into parts where the frequency was stimulated and the rest.

  3. The signal is cut into windows of 1s every 100ms. The value of the
  signal is squared, averaged and square rooted.

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal strea -> Identity => #1
-> Channel selector
  Channels list = CPz;POz
  Selection by index = false
-> Spatial Filter "CPz - POz" => #3
  Spatial filter coefficients = 1 -1
  Number of output channels = 1
  Number of input channels = 2
#1 -> Channel selector
  Channels list = Oz;O1;O2;POz;Iz
  Selection by index = false
-> Spatial Filter "4 x Oz - (O1 + O2 + POz + Iz)" => #5
  Spatial filter coefficients = 4 -1 -1 -1 -1
  Number of output channels = 1
  Number of input channels = 5
Input stream 1=#3, Input stream 2=#5 -> Identity => #6
Input stream 1=#6.Output stream 1, Input stream 2=#6.Output stream 2 -> Identity => #7
#7.Output stream 1 -> Temporal filter "20 Hz"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 29.625000
  High cut frequency (Hz) = 30.375000
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Path_Samples}/bci/ssvep/Configuration/temporal-filter-20Hz.xml
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 0.500000
  Epoch 1 intervals (in sec) = 0.100000
  0x8d21ff41 = ${Path_Samples}/bci/ssvep/Configuration/time-based-epoching.xml
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP" => #12
  Equation = log(1+x)
#7.Output stream 2 -> Temporal filter "20 Hz"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 29.625000
  High cut frequency (Hz) = 30.375000
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Path_Samples}/bci/ssvep/Configuration/temporal-filter-20Hz.xml
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 0.500000
  Epoch 1 intervals (in sec) = 0.100000
  0x8d21ff41 = ${Path_Samples}/bci/ssvep/Configuration/time-based-epoching.xml
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP" => #17
  Equation = log(1+x)
Input stream 1=#12, Input stream 2=#17 -> Feature aggregator
-> Classifier processor => #19
  Classifier to use = Linear Discrimimant Analysis (LDA)
  Filename to load configuration from = ${Path_Samples}/bci/ssvep/Classifiers/Classifier-20
  Reject class label = OVTK_StimulationId_Label_00
  Class 1 label = OVTK_StimulationId_Label_01
  Class 2 label = OVTK_StimulationId_Label_02
Input stream 1=#6.Output stream 1, Input stream 2=#6.Output stream 2 -> Identity => #20
#20.Output stream 1 -> Temporal filter "15 Hz"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 29.625000
  High cut frequency (Hz) = 30.375000
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = /opt/openvibe/trunk/dist/share/openvibe-scenarios/bci/ssvep/Configuration/temporal-filter-15Hz.xml
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 0.500000
  Epoch 1 intervals (in sec) = 0.100000
  0x8d21ff41 = ${Path_Samples}/bci/ssvep/Configuration/time-based-epoching.xml
#20.Output stream 2 -> Temporal filter "15 Hz"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 29.625000
  High cut frequency (Hz) = 30.375000
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = /opt/openvibe/trunk/dist/share/openvibe-scenarios/bci/ssvep/Configuration/temporal-filter-15Hz.xml
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 0.500000
  Epoch 1 intervals (in sec) = 0.100000
  0x8d21ff41 = ${Path_Samples}/bci/ssvep/Configuration/time-based-epoching.xml
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP" => #27
  Equation = log(1+x)
Input stream 1=#6.Output stream 1, Input stream 2=#6.Output stream 2 -> Identity => #28
#28.Output stream 1 -> Temporal filter "12 Hz"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 29.625000
  High cut frequency (Hz) = 30.375000
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Path_Samples}/bci/ssvep/Configuration/temporal-filter-20Hz.xml
#28.Output stream 2 -> Temporal filter "12 Hz"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 29.625000
  High cut frequency (Hz) = 30.375000
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Path_Samples}/bci/ssvep/Configuration/temporal-filter-20Hz.xml
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 0.500000
  Epoch 1 intervals (in sec) = 0.100000
  0x8d21ff41 = ${Path_Samples}/bci/ssvep/Configuration/time-based-epoching.xml
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP" => #34
  Equation = log(1+x)
Simple DSP "DSP" => #35
  Equation = log(1+x)
Input stream 1=#35, Input stream 2=#27 -> Feature aggregator
-> Classifier processor => #37
  Classifier to use = Linear Discrimimant Analysis (LDA)
  Filename to load configuration from = ${Path_Samples}/bci/ssvep/Classifiers/Classifier-15
  Reject class label = OVTK_StimulationId_Label_00
  Class 1 label = OVTK_StimulationId_Label_01
  Class 2 label = OVTK_StimulationId_Label_02
Simple DSP "DSP" => #38
  Equation = log(1+x)
Input stream 1=#38, Input stream 2=#34 -> Feature aggregator
-> Classifier processor => #40
  Classifier to use = Linear Discrimimant Analysis (LDA)
  Filename to load configuration from = ${Path_Samples}/bci/ssvep/Classifiers/Classifier-12
  Reject class label = OVTK_StimulationId_Label_00
  Class 1 label = OVTK_StimulationId_Label_01
  Class 2 label = OVTK_StimulationId_Label_02
New input[0]=#19.Labels, New input[1]=#37.Labels, New input[2]=#40.Labels -> SSVEP Voter => #41
  Lua Script = ${Path_Samples}/bci/ssvep/scripts/combination_classifier.lua
  Class count = 3
Input 1=#41, Input 2=#41, Input 3=#41 -> Button VRPN Server "VRPN Ship Control"
  Peripheral name = ShipControl
  Button 1 ON = OVTK_StimulationId_Label_00
  Button 1 OFF = OVTK_StimulationId_Label_00
  Button 2 ON = OVTK_StimulationId_Label_01
  Button 2 OFF = OVTK_StimulationId_Label_01
  Button 3 ON = OVTK_StimulationId_Label_02
  Button 3 OFF = OVTK_StimulationId_Label_02

Time based epoching "TBE"
  Epoch 1 duration (in sec) = 0.500000
  Epoch 1 intervals (in sec) = 0.100000
  0x8d21ff41 = ${Path_Samples}/bci/ssvep/Configuration/time-based-epoching.xml

Simple DSP "DSP"
  Equation = x*x

Simple DSP "DSP"
  Equation = x*x

Signal average "Sg Avg"
Signal average "Sg Avg"
0xc67a01dc Streamed matrix multiplexer

Start Command
  Peripheral name = StartCommand@localhost:1337
  Button 1 ON = OVTK_StimulationId_ExperimentStart
  Button 1 OFF = OVTK_StimulationId_ExperimentStart
-> Identity => #50
VRPN Target Request
  Peripheral name = RequestCommand@localhost:1337
  Button 1 ON = OVTK_StimulationId_Target
  Button 1 OFF = OVTK_StimulationId_NonTarget
-> SSVEP Shooter Controller => #52
  Lua Script = ${Path_Samples}/bci/ssvep/scripts/shooter_stimulator.lua
  Target Sequence = 0 3 5 7 2 6 4 1
Input stimulations 1=#50, Input stimulations 2=#52 -> Stimulation multiplexer => #53
Input 1=#50, Input 2=#53, Input 3=#50, Input 4=#50 -> Button VRPN Server "Control Buttons"
  Peripheral name = ControlButton
  Button 1 ON = OVTK_StimulationId_ExperimentStart
  Button 1 OFF = OVTK_StimulationId_ExperimentStart
  Button 2 ON = OVTK_StimulationId_ExperimentStop
  Button 2 OFF = OVTK_StimulationId_ExperimentStop
  Button 3 ON = OVTK_StimulationId_VisualStimulationStart
  Button 3 OFF = OVTK_StimulationId_VisualStimulationStart
  Button 4 ON = OVTK_StimulationId_VisualStimulationStop
  Button 4 OFF = OVTK_StimulationId_VisualStimulationStop
Input 1=#52, Input 2=#52, Input 3=#52, Input 4=#52, Input 5=#52, Input 6=#52, Input 7=#52, Input 8=#52 -> Button VRPN Server "VRPN Target Command"
  Peripheral name = NewTargetCommand
  Button 1 ON = OVTK_StimulationId_Label_00
  Button 1 OFF = OVTK_StimulationId_Label_00
  Button 2 ON = OVTK_StimulationId_Label_01
  Button 2 OFF = OVTK_StimulationId_Label_01
  Button 3 ON = OVTK_StimulationId_Label_02
  Button 3 OFF = OVTK_StimulationId_Label_02
  Button 4 ON = OVTK_StimulationId_Label_03
  Button 4 OFF = OVTK_StimulationId_Label_03
  Button 5 ON = OVTK_StimulationId_Label_04
  Button 5 OFF = OVTK_StimulationId_Label_04
  Button 6 ON = OVTK_StimulationId_Label_05
  Button 6 OFF = OVTK_StimulationId_Label_05
  Button 7 ON = OVTK_StimulationId_Label_06
  Button 7 OFF = OVTK_StimulationId_Label_06
  Button 8 ON = OVTK_StimulationId_Label_07
  Button 8 OFF = OVTK_StimulationId_Label_07

Start Stimulation
  Lua Script = ${Path_Samples}/bci/ssvep/scripts/start_stimulation.lua
  Delay = 1
-> Run Command
  Stimulation 1 = OVTK_StimulationId_ExperimentStart
  Command 1 = cd ${Path_Root}/../scripts && ./ov-ssvep-demo-shooter.sh&
