OpenViBE-Scenario
Comment
  Classifier Training

  After the training session, this scenario will process the recorded
  signal and train several classifiers. Each classifier works with one
  stimulation frequency and is capable to discern whether it is
  stimulated or not.

  All of the classifiers will be saved in []. If you want them to be saved
  in a different place, you should modify the paths in the three
  Classifier Trainer boxes.

  Training will begin automatically after the scenario finishes. You can
  verify classification rates in the terminal window.
Comment
  Processing chain

  The signal is processed in several stages :

  1. The signal is split by channels and two linear combinations are
  calculated : CPz - POz and 4 x Oz - (O1 + O2 + POz + Iz)

  2. For each stimulated frequency, both of these characteristics are
  split into parts where the frequency was stimulated and the rest.

  3. The signal is cut into windows of 1s every 100ms. The value of the
  signal is squared, averaged and square rooted.
Comment
  Signal processing for the first stimulation frequency
Comment
  Signal processing for the second stimulation frequency
Comment
  Signal processing for the third stimulation frequency
Comment
  Feature vector containing signal
  during stimulated periods.
Comment
  Feature vector containing signal
  during non-stimulated periods.
Comment
  Feature vector containing signal
  during stimulated periods.
Comment
  Feature vector containing signal
  during non-stimulated periods.
Comment
  Feature vector containing signal
  during stimulated periods.
Comment
  Feature vector containing signal
  during non-stimulated periods.

Generic stream reader => #0
  Filename = /opt/openvibe/trunk/dist/share/openvibe-scenarios/signals/ssvep-record-[2011.03.24-19.04.16].ov
Input stream 1=#0.Output stream 2, Input stream 2=#0.Output stream 3 -> Identity => #1
#1.Output stream 1 -> Channel selector
  Channels list = CPz;POz
  Selection by index = false
-> Spatial Filter "CPz - POz" => #3
  Spatial filter coefficients = 1;-1
  Number of output channels = 1
  Number of input channels = 2
#1.Output stream 1 -> Channel selector
  Channels list = Oz;O1;O2;POz;Iz
  Selection by index = false
-> Spatial Filter "4 x Oz - (O1 + O2 + POz + Iz)" => #5
  Spatial filter coefficients = 4;-1;-1;-1;-1
  Number of output channels = 1
  Number of input channels = 5
Input Signal 1=#3, Input Signal 2=#5 -> Signal Merger
-> Channel Rename => #7
  New channel names = Bipolar;Laplacian
Signal=#7, Stimulations=#1.Output stream 2 -> Signal display
  Time Scale = 10
  Display Mode = Scan
  Manual Vertical Scale = false
  Vertical Scale = 100
Input stream 1=#7, Input stream 2=#1.Output stream 2 -> Identity => #9
Input stream 1=#9.Output stream 1, Input stream 2=#9.Output stream 2 -> Identity => #10
#10.Output stream 1 -> Temporal filter "Frequency 1" => #11
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 29.625000
  High cut frequency (Hz) = 30.375000
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Path_Samples}/bci/ssvep/configuration/temporal-filter-freq-1.cfg
#10.Output stream 2 -> Target Separator => #12
  Lua Script = ${Path_Samples}/bci/ssvep/scripts/classifier-training-target-separator.lua
  Targets = 1
  Non Targets = 0 2 3
  Output Stimulation = OVTK_StimulationId_Target
Input signal=#11, Input stimulations=#12.Stimulations -> Stimulation based epoching "SBE" => #13
  Epoch duration (in sec) = 6.000000
  Epoch offset (in sec) = 1.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Path_Samples}/bci/ssvep/configuration/stimulation-based-epoching.cfg
#13.Epoched signal -> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 0.5
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Path_Samples}/bci/ssvep/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP"
  Equation = log(1+x)
-> Feature aggregator => #18
Input signal=#11, Input stimulations=#12.New output -> Stimulation based epoching "SBE" => #19
  Epoch duration (in sec) = 6.000000
  Epoch offset (in sec) = 1.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Path_Samples}/bci/ssvep/configuration/stimulation-based-epoching.cfg
#19.Epoched signal -> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 0.5
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Path_Samples}/bci/ssvep/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP"
  Equation = log(1+x)
-> Feature aggregator => #24
Stimulations=#10.Output stream 2, Features for class 1=#18, Features for class 2=#24 -> Classifier for Frequency n.1 => #25
  Classifier to use = Linear Discrimimant Analysis (LDA)
  Filename to save configuration to = ${Path_Samples}/bci/ssvep/classifiers/classifier-1
  Train trigger = OVTK_StimulationId_ExperimentStop
  Number of partitions for k-fold test = 10
Input stream 1=#9.Output stream 1, Input stream 2=#9.Output stream 2 -> Identity => #26
#26.Output stream 1 -> Temporal filter "Frequency 2" => #27
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 29.625000
  High cut frequency (Hz) = 30.375000
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Path_Samples}/bci/ssvep/configuration/temporal-filter-freq-2.cfg
#26.Output stream 2 -> Target Separator => #28
  Lua Script = ${Path_Samples}/bci/ssvep/scripts/classifier-training-target-separator.lua
  Targets = 2
  Non Targets = 0 1 3
  Output Stimulation = OVTK_StimulationId_Target
Input signal=#27, Input stimulations=#28.Stimulations -> Stimulation based epoching "SBE" => #29
  Epoch duration (in sec) = 6.000000
  Epoch offset (in sec) = 1.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Path_Samples}/bci/ssvep/configuration/stimulation-based-epoching.cfg
#29.Epoched signal -> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 0.5
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Path_Samples}/bci/ssvep/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP"
  Equation = log(1+x)
-> Feature aggregator => #34
Input signal=#27, Input stimulations=#28.New output -> Stimulation based epoching "SBE" => #35
  Epoch duration (in sec) = 6.000000
  Epoch offset (in sec) = 1.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Path_Samples}/bci/ssvep/configuration/stimulation-based-epoching.cfg
#35.Epoched signal -> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 0.5
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Path_Samples}/bci/ssvep/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP"
  Equation = log(1+x)
-> Feature aggregator => #40
Stimulations=#26.Output stream 2, Features for class 1=#34, Features for class 2=#40 -> Classifier for Frequency n.2 => #41
  Classifier to use = Linear Discrimimant Analysis (LDA)
  Filename to save configuration to = ${Path_Samples}/bci/ssvep/classifiers/classifier-2
  Train trigger = OVTK_StimulationId_ExperimentStop
  Number of partitions for k-fold test = 10
Input stream 1=#9.Output stream 1, Input stream 2=#9.Output stream 2 -> Identity => #42
#42.Output stream 1 -> Temporal filter "Frequency 3" => #43
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 29.625000
  High cut frequency (Hz) = 30.375000
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Path_Samples}/bci/ssvep/configuration/temporal-filter-freq-3.cfg
#42.Output stream 2 -> Target Separator => #44
  Lua Script = ${Path_Samples}/bci/ssvep/scripts/classifier-training-target-separator.lua
  Targets = 3
  Non Targets = 0 1 2
  Output Stimulation = OVTK_StimulationId_Target
Input signal=#43, Input stimulations=#44.Stimulations -> Stimulation based epoching "SBE" => #45
  Epoch duration (in sec) = 6.000000
  Epoch offset (in sec) = 1.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Path_Samples}/bci/ssvep/configuration/stimulation-based-epoching.cfg
#45.Epoched signal -> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 0.5
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Path_Samples}/bci/ssvep/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP"
  Equation = log(1+x)
-> Feature aggregator => #50
Input signal=#43, Input stimulations=#44.New output -> Stimulation based epoching "SBE" => #51
  Epoch duration (in sec) = 6.000000
  Epoch offset (in sec) = 1.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Path_Samples}/bci/ssvep/configuration/stimulation-based-epoching.cfg
#51.Epoched signal -> 0xc67a01dc Time based epoching "TBE"
  Epoch 1 duration (in sec) = 0.5
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Path_Samples}/bci/ssvep/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP"
  Equation = log(1+x)
-> Feature aggregator => #56
Stimulations=#42.Output stream 2, Features for class 1=#50, Features for class 2=#56 -> Classifier for Frequency n.3 => #57
  Classifier to use = Linear Discrimimant Analysis (LDA)
  Filename to save configuration to = ${Path_Samples}/bci/ssvep/classifiers/classifier-3
  Train trigger = OVTK_StimulationId_ExperimentStop
  Number of partitions for k-fold test = 10
New input[0]=#25, New input[1]=#41, New input[2]=#57 -> FlipSwitch
  Lua Script = ${Path_Samples}/bci/ssvep/scripts/classifier-training-flipswitch.lua
-> Player Controller
  Stimulation name = OVTK_StimulationId_Label_00
  Action to perform = Stop
