OpenViBE-Scenario
Comment
  Signal processing for the second stimulation frequency
Comment
  Signal processing for the first stimulation frequency
Comment
  Signal processing for the third stimulation frequency

Scenario Control => #0
  Peripheral name = SSVEP_VRPN_StartStop@${SSVEP_VRPNServerHost}:${SSVEP_VRPNServerPort}
  Button 1 ON = OVTK_StimulationId_ExperimentStart
  Button 1 OFF = OVTK_StimulationId_ExperimentStart
  Button 2 ON = OVTK_StimulationId_ExperimentStop
  Button 2 OFF = OVTK_StimulationId_ExperimentStop
#0.Output 1 -> Button Simplifier
  Lua Script = /opt/openvibe/trunk/dist/share/openvibe-scenarios/bci/ssvep/scripts/shooter-button-simplifier.lua
-> Identity => #2
#0.Output 2 -> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
Acquisition client => #4
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#4.Signal strea -> Identity => #5
-> Channel selector
  Channels list = CPz;POz
  Selection by index = false
-> Spatial Filter "CPz - POz" => #7
  Spatial filter coefficients = 1;-1
  Number of output channels = 1
  Number of input channels = 2
#5 -> Channel selector
  Channels list = Oz;O1;O2;POz;Iz
  Selection by index = false
-> Spatial Filter "4 x Oz - (O1 + O2 + POz + Iz)" => #9
  Spatial filter coefficients = 4;-1;-1;-1;-1
  Number of output channels = 1
  Number of input channels = 5
Input Signal 1=#7, Input Signal 2=#9 -> Signal Merger
-> Channel Rename => #11
  New channel names = Bipolar;Laplacian
-> Identity
-> Temporal filter "Frequency 1"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 29.625000
  High cut frequency (Hz) = 30.375000
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Path_Samples}/bci/ssvep/configuration/temporal-filter-freq-1.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 0.5
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = /opt/openvibe/trunk/dist/share/openvibe-scenarios/bci/ssvep/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP"
  Equation = log(1+x)
-> Feature aggregator
-> Classifier processor => #19
  Classifier to use = Linear Discrimimant Analysis (LDA)
  Filename to load configuration from = ${Path_Samples}/bci/ssvep/classifiers/classifier-1
  Reject class label = OVTK_StimulationId_Label_00
  Class 1 label = OVTK_StimulationId_Label_01
  Class 2 label = OVTK_StimulationId_Label_02
#11 -> Identity
-> Temporal filter "Frequency 2"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 29.625000
  High cut frequency (Hz) = 30.375000
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Path_Samples}/bci/ssvep/configuration/temporal-filter-freq-2.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 0.5
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = /opt/openvibe/trunk/dist/share/openvibe-scenarios/bci/ssvep/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP"
  Equation = log(1+x)
-> Feature aggregator
-> Classifier processor => #27
  Classifier to use = Linear Discrimimant Analysis (LDA)
  Filename to load configuration from = ${Path_Samples}/bci/ssvep/classifiers/classifier-2
  Reject class label = OVTK_StimulationId_Label_00
  Class 1 label = OVTK_StimulationId_Label_01
  Class 2 label = OVTK_StimulationId_Label_02
#11 -> Identity
-> Temporal filter "Frequency 3"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 29.625000
  High cut frequency (Hz) = 30.375000
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Path_Samples}/bci/ssvep/configuration/temporal-filter-freq-3.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 0.5
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = /opt/openvibe/trunk/dist/share/openvibe-scenarios/bci/ssvep/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP"
  Equation = log(1+x)
-> Feature aggregator
-> Classifier processor => #35
  Classifier to use = Linear Discrimimant Analysis (LDA)
  Filename to load configuration from = ${Path_Samples}/bci/ssvep/classifiers/classifier-3
  Reject class label = OVTK_StimulationId_Label_00
  Class 1 label = OVTK_StimulationId_Label_01
  Class 2 label = OVTK_StimulationId_Label_02
New input[0]=#19.Labels, New input[1]=#27.Labels, New input[2]=#35.Labels -> SSVEP Voter => #36
  Lua Script = ${Path_Samples}/bci/ssvep/scripts/shooter-combination-classifier.lua
  Class count = 3
Input 1=#36, Input 2=#36, Input 3=#36 -> Button VRPN Server "VRPN Ship Control"
  Peripheral name = SSVEP_VRPN_ShipControl
  Button 1 ON = OVTK_StimulationId_Label_00
  Button 1 OFF = OVTK_StimulationId_Label_00
  Button 2 ON = OVTK_StimulationId_Label_01
  Button 2 OFF = OVTK_StimulationId_Label_01
  Button 3 ON = OVTK_StimulationId_Label_02
  Button 3 OFF = OVTK_StimulationId_Label_02
VRPN Target Request => #38
  Peripheral name = SSVEP_VRPN_TargetRequest@${SSVEP_VRPNServerHost}:${SSVEP_VRPNServerPort}
  Button 1 ON = OVTK_StimulationId_Target
  Button 1 OFF = OVTK_StimulationId_NonTarget
-> SSVEP Shooter Controller => #39
  Lua Script = ${Path_Samples}/bci/ssvep/scripts/shooter-controller.lua
  Target Sequence = 0 3 5 7 2 6 4 1
Input stimulations 1=#2, Input stimulations 2=#39 -> Stimulation multiplexer => #40
Input 1=#2, Input 2=#40, Input 3=#2, Input 4=#2 -> Button VRPN Server "Stimulator Control"
  Peripheral name = SSVEP_VRPN_StimulatorControl
  Button 1 ON = OVTK_StimulationId_ExperimentStart
  Button 1 OFF = OVTK_StimulationId_ExperimentStart
  Button 2 ON = OVTK_StimulationId_ExperimentStop
  Button 2 OFF = OVTK_StimulationId_ExperimentStop
  Button 3 ON = OVTK_StimulationId_VisualStimulationStart
  Button 3 OFF = OVTK_StimulationId_VisualStimulationStart
  Button 4 ON = OVTK_StimulationId_VisualStimulationStop
  Button 4 OFF = OVTK_StimulationId_VisualStimulationStop
Input 1=#39, Input 2=#39, Input 3=#39, Input 4=#39, Input 5=#39, Input 6=#39, Input 7=#39, Input 8=#39 -> Button VRPN Server "VRPN Target Command"
  Peripheral name = SSVEP_VRPN_ShooterTarget
  Button 1 ON = OVTK_StimulationId_Label_00
  Button 1 OFF = OVTK_StimulationId_Label_00
  Button 2 ON = OVTK_StimulationId_Label_01
  Button 2 OFF = OVTK_StimulationId_Label_01
  Button 3 ON = OVTK_StimulationId_Label_02
  Button 3 OFF = OVTK_StimulationId_Label_02
  Button 4 ON = OVTK_StimulationId_Label_03
  Button 4 OFF = OVTK_StimulationId_Label_03
  Button 5 ON = OVTK_StimulationId_Label_04
  Button 5 OFF = OVTK_StimulationId_Label_04
  Button 6 ON = OVTK_StimulationId_Label_05
  Button 6 OFF = OVTK_StimulationId_Label_05
  Button 7 ON = OVTK_StimulationId_Label_06
  Button 7 OFF = OVTK_StimulationId_Label_06
  Button 8 ON = OVTK_StimulationId_Label_07
  Button 8 OFF = OVTK_StimulationId_Label_07
Input stream 1=#4.Signal strea, Input stream 2=#4.Stimulations, Input stream 3=#38, Input stream 4=#0.Output 1, Player Control=#0.Output 2 -> Generic stream writer
  Filename = ${Path_Samples}/signals/ssvep-online-record-[$core{date}-$core{time}].ov
  Use compression = true

Start Stimulation
  Lua Script = ${Path_Samples}/bci/ssvep/scripts/start-stimulator.lua
  Delay = 1
-> Run Command
  Stimulation 1 = OVTK_StimulationId_ExperimentStart
  Command 1 = ${External_Application_Launcher} ssvep-demo-shooter
